CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|E:\
    Name of the file:UH1_H35-cp3-preprocessed_metadata.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:sample_name
    Rescale intensities?:No

ImageMath:[module_num:2|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Membrane
    Image or measurement?:Image
    Select the first image:CD45
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:PanKeratin
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:eCadherin
    Multiply the third image by:1.0
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
ImageMath:[module_num:3|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Tumour_img
    Image or measurement?:Image
    Select the first image:PanKeratin
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:eCadherin
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:b2M
    Multiply the third image by:1.0
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:DNA1
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,12
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:5|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:SMA
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectIntensity Multichannel:[module_num:6|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
    Hidden:32
    Select an image to measure:CD11c
    Select an image to measure:CD15
    Select an image to measure:CD16
    Select an image to measure:CD163
    Select an image to measure:CD20
    Select an image to measure:CD27
    Select an image to measure:CD3
    Select an image to measure:CD31
    Select an image to measure:CD34
    Select an image to measure:CD4
    Select an image to measure:CD45
    Select an image to measure:CD45RA
    Select an image to measure:CD45RO
    Select an image to measure:CD57
    Select an image to measure:CD68
    Select an image to measure:CD74
    Select an image to measure:CD8a
    Select an image to measure:DNA1
    Select an image to measure:DNA2
    Select an image to measure:FAP
    Select an image to measure:FoxP3
    Select an image to measure:IgA
    Select an image to measure:IgM
    Select an image to measure:Ki67
    Select an image to measure:PD1
    Select an image to measure:PDL1
    Select an image to measure:PanKeratin
    Select an image to measure:SMA
    Select an image to measure:Vimentin
    Select an image to measure:b2M
    Select an image to measure:eCadherin
    Select an image to measure:Tumour_img
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Number of channels:1
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Cells
    Name the output image:Cell_Mask
    Select the color format:uint16
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:Cell_Mask
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-Cell_Mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Number_Object_Number,Cells|Intensity_MassDisplacement_CD74_c1,Cells|Intensity_MassDisplacement_Tumour_img_c1,Cells|Intensity_MassDisplacement_CD57_c1,Cells|Intensity_MassDisplacement_CD31_c1,Cells|Intensity_MassDisplacement_CD34_c1,Cells|Intensity_MassDisplacement_CD4_c1,Cells|Intensity_MassDisplacement_Vimentin_c1,Cells|Intensity_MassDisplacement_CD3_c1,Cells|Intensity_MassDisplacement_PanKeratin_c1,Cells|Intensity_MassDisplacement_SMA_c1,Cells|Intensity_MassDisplacement_DNA1_c1,Cells|Intensity_MassDisplacement_DNA2_c1,Cells|Intensity_MassDisplacement_FAP_c1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:\g<sample_name>-Cells.csv
    Use the object name for the file name?:No
