CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:65
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|E:\
    Name of the file:cp_metatada.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:sample_name
    Rescale intensities?:No

Threshold:[module_num:2|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
    Select the input image:141Pr-SMA
    Name the output image:CP3_141PrSMA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:3|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
    Select the input image:142Nd-IgA
    Name the output image:CP3_142NdIgA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:4|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
    Select the input image:143Nd-Vimentin
    Name the output image:CP3_143NdVimentin_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:5|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
    Select the input image:144Nd-CD74
    Name the output image:CP3_144NdCD74_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:6|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
    Select the input image:146Nd-CD16
    Name the output image:CP3_146NdCD16_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:7|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
    Select the input image:147Sm-CD163
    Name the output image:CP3_147SmCD163_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:8|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
    Select the input image:148Nd-PanKeratin
    Name the output image:CP3_148NdPanKeratin_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:9|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
    Select the input image:149Sm-CD15
    Name the output image:CP3_149SmCD15_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:10|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
    Select the input image:150Nd-PDL1
    Name the output image:CP3_150Nd_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:11|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
    Select the input image:151Eu-CD31
    Name the output image:CP3_151EuCD31_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:12|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
    Select the input image:152Sm-CD45
    Name the output image:CP3_152SmCD45_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:13|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
    Select the input image:153Eu-FAP
    Name the output image:CP3_153EuFAP_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:14|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
    Select the input image:155Gd-FoxP3
    Name the output image:CP3_155GdFoxP3_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:15|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
    Select the input image:156Gd-CD4
    Name the output image:CP3_156GdCD4_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:16|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
    Select the input image:158Gd-eCadherin
    Name the output image:CP3_158GdeCadherin_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:17|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
    Select the input image:159Tb-CD68
    Name the output image:CP3_159TbCD68_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:18|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
    Select the input image:161Dy-CD20
    Name the output image:CP3_161DyCD20_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:19|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
    Select the input image:162Dy-CD8a
    Name the output image:CP3_162DyCD8a_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:20|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
    Select the input image:164Dy-CD34
    Name the output image:CP3_164DyCD34_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:21|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
    Select the input image:165Ho-PD1
    Name the output image:CP3_165HoPD1_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:22|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
    Select the input image:166Er-CD45RA
    Name the output image:CP3_166ErCD45RA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:23|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
    Select the input image:167Er-GzB
    Name the output image:CP3_167ErGzB_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:24|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
    Select the input image:168Er-Ki67
    Name the output image:CP3_168ErKi67_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:25|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
    Select the input image:169Tm-IgM
    Name the output image:CP3_169Tm_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:26|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
    Select the input image:170Er-CD3
    Name the output image:CP3_170ErCD3_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:27|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
    Select the input image:171Yb-CD27
    Name the output image:CP3_171YbCD27_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:28|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
    Select the input image:173Yb-CD45RO
    Name the output image:CP3_173YbCD45RO_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:29|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
    Select the input image:174Yb-CD57
    Name the output image:CP3_174YbCD57_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:30|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
    Select the input image:175Lu-CD11c
    Name the output image:CP3_175LuCD11c_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:31|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
    Select the input image:176Yb-b2M
    Name the output image:CP3_176Ybb2M_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:32|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
    Select the input image:191Ir-DNA
    Name the output image:CP3_191IrDNA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:33|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
    Select the input image:193Ir-DNA
    Name the output image:CP3_193IrDNA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:CP3_141PrSMA_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_141Pr_SMA_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CP3_142NdIgA_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_142Nd_IgA_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:CP3_143NdVimentin_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_143Nd_Vimentin_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:CP3_144NdCD74_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_144Nd_CD74_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:CP3_146NdCD16_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_146Nd_CD16_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:CP3_147SmCD163_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_147Sm_CD163_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:CP3_148NdPanKeratin_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_148Nd_PanKeratin_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:CP3_149SmCD15_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_149Sm_CD15_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:CP3_150Nd_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_150Nd_PDL1_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:CP3_151EuCD31_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_151Eu_CD31_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:CP3_152SmCD45_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_152Sm_CD45_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:CP3_153EuFAP_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_153Eu_FAP_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:CP3_155GdFoxP3_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_155Gd_FoxP3_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:47|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
    Select the type of image to save:Image
    Select the image to save:CP3_156GdCD4_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_156Gd_CD4_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:48|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
    Select the type of image to save:Image
    Select the image to save:CP3_158GdeCadherin_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_158Gd_eCadherin_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:49|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
    Select the type of image to save:Image
    Select the image to save:CP3_159TbCD68_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_159Tb_CD68_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:CP3_161DyCD20_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_161Dy_CD20_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:CP3_162DyCD8a_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_162Dy_CD8a_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:CP3_164DyCD34_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_164Dy_CD34_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:CP3_165HoPD1_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_165Ho_PD1_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:CP3_166ErCD45RA_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_166Er_CD45RA_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:55|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
    Select the type of image to save:Image
    Select the image to save:CP3_167ErGzB_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_167Er_GzB_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:56|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
    Select the type of image to save:Image
    Select the image to save:CP3_168ErKi67_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_168Er_Ki67_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:57|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
    Select the type of image to save:Image
    Select the image to save:CP3_169Tm_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_169Tm_IgM_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:58|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
    Select the type of image to save:Image
    Select the image to save:CP3_170ErCD3_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_170Er_CD3_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:59|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
    Select the type of image to save:Image
    Select the image to save:CP3_171YbCD27_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_171Yb_CD27_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:60|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
    Select the type of image to save:Image
    Select the image to save:CP3_173YbCD45RO_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_173Yb_CD45RO_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:61|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
    Select the type of image to save:Image
    Select the image to save:CP3_174YbCD57_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_174Yb_CD57_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:62|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
    Select the type of image to save:Image
    Select the image to save:CP3_175LuCD11c_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_175Lu_CD11c_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:63|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
    Select the type of image to save:Image
    Select the image to save:CP3_176Ybb2M_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_176Yb_b2M_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:64|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
    Select the type of image to save:Image
    Select the image to save:CP3_191IrDNA_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_191Ir_DNA1_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:65|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
    Select the type of image to save:Image
    Select the image to save:CP3_193IrDNA_Threshold
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>_193Ir_DNA2_Cleaned
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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