CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:97
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|E:\
    Name of the file:cp_metatada.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:sample_name
    Rescale intensities?:No

Threshold:[module_num:2|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
    Select the input image:141Pr-SMA
    Name the output image:CP3_141PrSMA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:3|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
    Select the input image:142Nd-IgA
    Name the output image:CP3_142NdIgA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:4|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
    Select the input image:143Nd-Vimentin
    Name the output image:CP3_143NdVimentin_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:5|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
    Select the input image:144Nd-CD74
    Name the output image:CP3_144NdCD74_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:6|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
    Select the input image:146Nd-CD16
    Name the output image:CP3_146NdCD16_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:7|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
    Select the input image:147Sm-CD163
    Name the output image:CP3_147SmCD163_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:8|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
    Select the input image:148Nd-PanKeratin
    Name the output image:CP3_148NdPanKeratin_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:9|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
    Select the input image:149Sm-CD15
    Name the output image:CP3_149SmCD15_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:10|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
    Select the input image:150Nd-PDL1
    Name the output image:CP3_150NdPDL1_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:11|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
    Select the input image:151Eu-CD31
    Name the output image:CP3_151EuCD31_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:12|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
    Select the input image:152Sm-CD45
    Name the output image:CP3_152SmCD45_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:13|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
    Select the input image:153Eu-FAP
    Name the output image:CP3_153EuFAP_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:14|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
    Select the input image:155Gd-FoxP3
    Name the output image:CP3_155GdFoxP3_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:15|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
    Select the input image:156Gd-CD4
    Name the output image:CP3_156GdCD4_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:16|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
    Select the input image:158Gd-eCadherin
    Name the output image:CP3_158GdeCadherin_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:17|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
    Select the input image:159Tb-CD68
    Name the output image:CP3_159TbCD68_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:18|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
    Select the input image:161Dy-CD20
    Name the output image:CP3_161DyCD20_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:19|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
    Select the input image:162Dy-CD8a
    Name the output image:CP3_162DyCD8a_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:20|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
    Select the input image:164Dy-CD34
    Name the output image:CP3_164DyCD34_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:21|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
    Select the input image:165Ho-PD1
    Name the output image:CP3_165HoPD1_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:22|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
    Select the input image:166Er-CD45RA
    Name the output image:CP3_166ErCD45RA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:23|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
    Select the input image:167Er-GzB
    Name the output image:CP3_167ErGzB_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:24|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
    Select the input image:168Er-Ki67
    Name the output image:CP3_168ErKi67_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:25|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
    Select the input image:169Tm-IgM
    Name the output image:CP3_169TmIgM_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:26|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
    Select the input image:170Er-CD3
    Name the output image:CP3_170ErCD3_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:27|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
    Select the input image:171Yb-CD27
    Name the output image:CP3_171YbCD27_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:28|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
    Select the input image:173Yb-CD45RO
    Name the output image:CP3_173YbCD45RO_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:29|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
    Select the input image:174Yb-CD57
    Name the output image:CP3_174YbCD57_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:30|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
    Select the input image:175Lu-CD11c
    Name the output image:CP3_175LuCD11c_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:31|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
    Select the input image:176Yb-b2M
    Name the output image:CP3_176Ybb2M_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:32|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
    Select the input image:191Ir-DNA
    Name the output image:CP3_191IrDNA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:33|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
    Select the input image:193Ir-DNA
    Name the output image:CP3_193IrDNA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MaskImage:[module_num:34|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
    Select the input image:141Pr-SMA
    Name the output image:CP3_141Pr_SMA_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_141PrSMA_Threshold
    Invert the mask?:No

MaskImage:[module_num:35|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
    Select the input image:142Nd-IgA
    Name the output image:CP3_142Nd_IgA_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_142NdIgA_Threshold
    Invert the mask?:No

MaskImage:[module_num:36|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
    Select the input image:143Nd-Vimentin
    Name the output image:CP3_143Nd_Vimentin_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_143NdVimentin_Threshold
    Invert the mask?:No

MaskImage:[module_num:37|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
    Select the input image:144Nd-CD74
    Name the output image:CP3_144Nd_CD74_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_144NdCD74_Threshold
    Invert the mask?:No

MaskImage:[module_num:38|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
    Select the input image:146Nd-CD16
    Name the output image:CP3_146Nd_CD16_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_146NdCD16_Threshold
    Invert the mask?:No

MaskImage:[module_num:39|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
    Select the input image:147Sm-CD163
    Name the output image:CP3_147Sm_CD163_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_147SmCD163_Threshold
    Invert the mask?:No

MaskImage:[module_num:40|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
    Select the input image:148Nd-PanKeratin
    Name the output image:CP3_148Nd_PanKeratin_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_148NdPanKeratin_Threshold
    Invert the mask?:No

MaskImage:[module_num:41|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
    Select the input image:149Sm-CD15
    Name the output image:CP3_149Sm_CD15_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_149SmCD15_Threshold
    Invert the mask?:No

MaskImage:[module_num:42|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
    Select the input image:150Nd-PDL1
    Name the output image:CP3_150Nd_PDL1_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_150NdPDL1_Threshold
    Invert the mask?:No

MaskImage:[module_num:43|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
    Select the input image:151Eu-CD31
    Name the output image:CP3_151Eu_CD31_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_151EuCD31_Threshold
    Invert the mask?:No

MaskImage:[module_num:44|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
    Select the input image:152Sm-CD45
    Name the output image:CP3_152Sm_CD45_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_152SmCD45_Threshold
    Invert the mask?:No

MaskImage:[module_num:45|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
    Select the input image:153Eu-FAP
    Name the output image:CP3_153Eu_FAP_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_153EuFAP_Threshold
    Invert the mask?:No

MaskImage:[module_num:46|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
    Select the input image:155Gd-FoxP3
    Name the output image:CP3_155Gd_FoxP3_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_155GdFoxP3_Threshold
    Invert the mask?:No

MaskImage:[module_num:47|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
    Select the input image:156Gd-CD4
    Name the output image:CP3_156Gd_CD4_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_156GdCD4_Threshold
    Invert the mask?:No

MaskImage:[module_num:48|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
    Select the input image:158Gd-eCadherin
    Name the output image:CP3_158Gd_eCadherin_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_158GdeCadherin_Threshold
    Invert the mask?:No

MaskImage:[module_num:49|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
    Select the input image:159Tb-CD68
    Name the output image:CP3_159Tb_CD68_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_159TbCD68_Threshold
    Invert the mask?:No

MaskImage:[module_num:50|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
    Select the input image:161Dy-CD20
    Name the output image:CP3_161Dy_CD20_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_161DyCD20_Threshold
    Invert the mask?:No

MaskImage:[module_num:51|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
    Select the input image:162Dy-CD8a
    Name the output image:CP3_162Dy_CD8a_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_162DyCD8a_Threshold
    Invert the mask?:No

MaskImage:[module_num:52|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
    Select the input image:164Dy-CD34
    Name the output image:CP3_164Dy_CD34_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_164DyCD34_Threshold
    Invert the mask?:No

MaskImage:[module_num:53|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
    Select the input image:165Ho-PD1
    Name the output image:CP3_165Ho_PD1_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_165HoPD1_Threshold
    Invert the mask?:No

MaskImage:[module_num:54|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
    Select the input image:166Er-CD45RA
    Name the output image:CP3_166Er_CD45RA_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_166ErCD45RA_Threshold
    Invert the mask?:No

MaskImage:[module_num:55|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
    Select the input image:167Er-GzB
    Name the output image:CP3_167Er_GzB_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_167ErGzB_Threshold
    Invert the mask?:No

MaskImage:[module_num:56|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
    Select the input image:168Er-Ki67
    Name the output image:CP3_168Er_Ki67_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_168ErKi67_Threshold
    Invert the mask?:No

MaskImage:[module_num:57|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
    Select the input image:169Tm-IgM
    Name the output image:CP3_169Tm_IgM_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_169TmIgM_Threshold
    Invert the mask?:No

MaskImage:[module_num:58|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
    Select the input image:170Er-CD3
    Name the output image:CP3_170Er_CD3_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_170ErCD3_Threshold
    Invert the mask?:No

MaskImage:[module_num:59|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
    Select the input image:171Yb-CD27
    Name the output image:CP3_171Yb_CD27_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_171YbCD27_Threshold
    Invert the mask?:No

MaskImage:[module_num:60|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
    Select the input image:173Yb-CD45RO
    Name the output image:CP3_173Yb_CD45RO_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_173YbCD45RO_Threshold
    Invert the mask?:No

MaskImage:[module_num:61|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
    Select the input image:174Yb-CD57
    Name the output image:CP3_174Yb_CD57_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_174YbCD57_Threshold
    Invert the mask?:No

MaskImage:[module_num:62|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
    Select the input image:175Lu-CD11c
    Name the output image:CP3_175Lu_CD11c_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_175LuCD11c_Threshold
    Invert the mask?:No

MaskImage:[module_num:63|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
    Select the input image:176Yb-b2M
    Name the output image:CP3_176Yb_b2M_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_176Ybb2M_Threshold
    Invert the mask?:No

MaskImage:[module_num:64|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
    Select the input image:191Ir-DNA
    Name the output image:CP3_191Ir_DNA1_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_191IrDNA_Threshold
    Invert the mask?:No

MaskImage:[module_num:65|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
    Select the input image:193Ir-DNA
    Name the output image:CP3_193Ir_DNA2_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_193IrDNA_Threshold
    Invert the mask?:No

SaveImages:[module_num:66|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
    Select the type of image to save:Image
    Select the image to save:CP3_141Pr_SMA_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-141Pr-SMA-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:67|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CP3_142Nd_IgA_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-142Nd-IgA-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:68|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
    Select the type of image to save:Image
    Select the image to save:CP3_143Nd_Vimentin_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-143Nd-Vimentin-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:69|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
    Select the type of image to save:Image
    Select the image to save:CP3_144Nd_CD74_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-144Nd-CD74-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:70|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
    Select the type of image to save:Image
    Select the image to save:CP3_146Nd_CD16_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-146Nd-CD16-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:71|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
    Select the type of image to save:Image
    Select the image to save:CP3_147Sm_CD163_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-147Sm-CD163-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:72|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
    Select the type of image to save:Image
    Select the image to save:CP3_148Nd_PanKeratin_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-148Nd-PanKeratin-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:73|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
    Select the type of image to save:Image
    Select the image to save:CP3_149Sm_CD15_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-149Sm-CD15-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:74|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
    Select the type of image to save:Image
    Select the image to save:CP3_150Nd_PDL1_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-150Nd-PDL1-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:75|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
    Select the type of image to save:Image
    Select the image to save:CP3_151Eu_CD31_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-151Eu-CD31-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:76|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
    Select the type of image to save:Image
    Select the image to save:CP3_152Sm_CD45_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-152Sm-CD45-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:77|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
    Select the type of image to save:Image
    Select the image to save:CP3_153Eu_FAP_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-153Eu-FAP-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:78|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
    Select the type of image to save:Image
    Select the image to save:CP3_155Gd_FoxP3_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-155Gd-FoxP3-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:79|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
    Select the type of image to save:Image
    Select the image to save:CP3_156Gd_CD4_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-156Gd-CD4-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:80|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
    Select the type of image to save:Image
    Select the image to save:CP3_158Gd_eCadherin_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-158Gd-eCadherin-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:81|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
    Select the type of image to save:Image
    Select the image to save:CP3_159Tb_CD68_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-159Tb-CD68-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:82|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
    Select the type of image to save:Image
    Select the image to save:CP3_161Dy_CD20_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-161Dy-CD20-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:83|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
    Select the type of image to save:Image
    Select the image to save:CP3_162Dy_CD8a_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-162Dy-CD8a-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:84|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
    Select the type of image to save:Image
    Select the image to save:CP3_164Dy_CD34_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-164Dy-CD34-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:85|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
    Select the type of image to save:Image
    Select the image to save:CP3_165Ho_PD1_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-165Ho-PD1-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:86|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
    Select the type of image to save:Image
    Select the image to save:CP3_166Er_CD45RA_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-166Er-CD45RA-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:87|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
    Select the type of image to save:Image
    Select the image to save:CP3_167Er_GzB_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-167Er-GzB-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:88|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
    Select the type of image to save:Image
    Select the image to save:CP3_168Er_Ki67_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-168Er-Ki67-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:89|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
    Select the type of image to save:Image
    Select the image to save:CP3_169Tm_IgM_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-169Tm-IgM-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:90|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
    Select the type of image to save:Image
    Select the image to save:CP3_170Er_CD3_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-170Er-CD3-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:91|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
    Select the type of image to save:Image
    Select the image to save:CP3_171Yb_CD27_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-171Yb-CD27-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:92|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
    Select the type of image to save:Image
    Select the image to save:CP3_173Yb_CD45RO_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-173Yb-CD45RO-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:93|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
    Select the type of image to save:Image
    Select the image to save:CP3_174Yb_CD57_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-174Yb-CD57-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:94|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
    Select the type of image to save:Image
    Select the image to save:CP3_175Lu_CD11c_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-175Lu-CD11c-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:95|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
    Select the type of image to save:Image
    Select the image to save:CP3_176Yb_b2M_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-176Yb-b2M-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:96|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
    Select the type of image to save:Image
    Select the image to save:CP3_191Ir_DNA1_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-191Ir-DNA1-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:97|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
    Select the type of image to save:Image
    Select the image to save:CP3_193Ir_DNA2_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-193Ir-DNA2-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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