CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:82
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|colcc/work/d8/f51229ea8f62be33356146a4aba16b
    Name of the file:CRC_2-cp3_normalized_tiff_metadata.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:sample_name
    Rescale intensities?:No

Threshold:[module_num:2|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
    Select the input image:CAMK4
    Name the output image:CP3_CAMK4_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:3|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
    Select the input image:CD11c
    Name the output image:CP3_CD11c_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:4|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
    Select the input image:CD16
    Name the output image:CP3_CD16_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:5|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
    Select the input image:CD20
    Name the output image:CP3_CD20_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:6|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
    Select the input image:CD27
    Name the output image:CP3_CD27_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:7|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
    Select the input image:CD3
    Name the output image:CP3_CD3_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:8|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
    Select the input image:CD34
    Name the output image:CP3_CD34_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:9|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
    Select the input image:CD4
    Name the output image:CP3_CD4_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:10|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
    Select the input image:CD45
    Name the output image:CP3_CD45_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:11|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
    Select the input image:CD45RA
    Name the output image:CP3_CD45RA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:12|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
    Select the input image:CD45RO
    Name the output image:CP3_CD45RO_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:13|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
    Select the input image:CD68
    Name the output image:CP3_CD68_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:14|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
    Select the input image:CD8a
    Name the output image:CP3_CD8a_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:15|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
    Select the input image:CollagenIV
    Name the output image:CP3_CollagenIV_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:16|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
    Select the input image:DNA1
    Name the output image:CP3_DNA1_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:17|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
    Select the input image:FoxP3
    Name the output image:CP3_FoxP3_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:18|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
    Select the input image:IFNA5
    Name the output image:CP3_IFNA5_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:19|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
    Select the input image:IgA
    Name the output image:CP3_IgA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:20|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
    Select the input image:IgM
    Name the output image:CP3_IgM_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:21|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
    Select the input image:Ki67
    Name the output image:CP3_Ki67_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:22|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
    Select the input image:PD1
    Name the output image:CP3_PD1_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:23|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
    Select the input image:PDL1
    Name the output image:CP3_PDL1_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:24|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
    Select the input image:PanKeratin
    Name the output image:CP3_PanKeratin_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:25|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
    Select the input image:SMA
    Name the output image:CP3_SMA_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:26|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
    Select the input image:VEGFc
    Name the output image:CP3_VEGFc_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:27|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
    Select the input image:Vimentin
    Name the output image:CP3_Vimentin_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Threshold:[module_num:28|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
    Select the input image:eCadherin
    Name the output image:CP3_eCadherin_Threshold
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.6,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MaskImage:[module_num:29|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
    Select the input image:CAMK4
    Name the output image:CP3_CAMK4_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CAMK4_Threshold
    Invert the mask?:No

MaskImage:[module_num:30|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
    Select the input image:CD11c
    Name the output image:CP3_CD11c_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD11c_Threshold
    Invert the mask?:No

MaskImage:[module_num:31|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
    Select the input image:CD16
    Name the output image:CP3_CD16_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD16_Threshold
    Invert the mask?:No

MaskImage:[module_num:32|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
    Select the input image:CD20
    Name the output image:CP3_CD20_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD20_Threshold
    Invert the mask?:No

MaskImage:[module_num:33|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
    Select the input image:CD27
    Name the output image:CP3_CD27_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD27_Threshold
    Invert the mask?:No

MaskImage:[module_num:34|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
    Select the input image:CD3
    Name the output image:CP3_CD3_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD3_Threshold
    Invert the mask?:No

MaskImage:[module_num:35|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
    Select the input image:CD34
    Name the output image:CP3_CD34_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD34_Threshold
    Invert the mask?:No

MaskImage:[module_num:36|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
    Select the input image:CD4
    Name the output image:CP3_CD4_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD4_Threshold
    Invert the mask?:No

MaskImage:[module_num:37|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
    Select the input image:CD45
    Name the output image:CP3_CD45_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD45_Threshold
    Invert the mask?:No

MaskImage:[module_num:38|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
    Select the input image:CD45RA
    Name the output image:CP3_CD45RA_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD45RA_Threshold
    Invert the mask?:No

MaskImage:[module_num:39|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
    Select the input image:CD45RO
    Name the output image:CP3_CD45RO_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD45RO_Threshold
    Invert the mask?:No

MaskImage:[module_num:40|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
    Select the input image:CD68
    Name the output image:CP3_CD68_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD68_Threshold
    Invert the mask?:No

MaskImage:[module_num:41|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
    Select the input image:CD8a
    Name the output image:CP3_CD8a_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CD8a_Threshold
    Invert the mask?:No

MaskImage:[module_num:42|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
    Select the input image:CollagenIV
    Name the output image:CP3_CollagenIV_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_CollagenIV_Threshold
    Invert the mask?:No

MaskImage:[module_num:43|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
    Select the input image:DNA1
    Name the output image:CP3_DNA1_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_DNA1_Threshold
    Invert the mask?:No

MaskImage:[module_num:44|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
    Select the input image:FoxP3
    Name the output image:CP3_FoxP3_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_FoxP3_Threshold
    Invert the mask?:No

MaskImage:[module_num:45|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
    Select the input image:IFNA5
    Name the output image:CP3_IFNA5_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_IFNA5_Threshold
    Invert the mask?:No

MaskImage:[module_num:46|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
    Select the input image:IgA
    Name the output image:CP3_IgA_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_IgA_Threshold
    Invert the mask?:No

MaskImage:[module_num:47|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
    Select the input image:IgM
    Name the output image:CP3_IgM_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_IgM_Threshold
    Invert the mask?:No

MaskImage:[module_num:48|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
    Select the input image:Ki67
    Name the output image:CP3_Ki67_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_Ki67_Threshold
    Invert the mask?:No

MaskImage:[module_num:49|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
    Select the input image:PD1
    Name the output image:CP3_PD1_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_PD1_Threshold
    Invert the mask?:No

MaskImage:[module_num:50|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
    Select the input image:PDL1
    Name the output image:CP3_PDL1_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_PDL1_Threshold
    Invert the mask?:No

MaskImage:[module_num:51|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
    Select the input image:PanKeratin
    Name the output image:CP3_PanKeratin_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_PanKeratin_Threshold
    Invert the mask?:No

MaskImage:[module_num:52|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
    Select the input image:SMA
    Name the output image:CP3_SMA_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_SMA_Threshold
    Invert the mask?:No

MaskImage:[module_num:53|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
    Select the input image:VEGFc
    Name the output image:CP3_VEGFc_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_VEGFc_Threshold
    Invert the mask?:No

MaskImage:[module_num:54|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
    Select the input image:Vimentin
    Name the output image:CP3_Vimentin_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_Vimentin_Threshold
    Invert the mask?:No

MaskImage:[module_num:55|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
    Select the input image:eCadherin
    Name the output image:CP3_eCadherin_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:CP3_eCadherin_Threshold
    Invert the mask?:No

SaveImages:[module_num:56|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
    Select the type of image to save:Image
    Select the image to save:CP3_CAMK4_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CAMK4-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:57|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD11c_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD11c-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:58|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD16_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD16-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:59|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD20_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD20-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:60|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD27_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD27-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:61|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD34_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD34-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:62|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD3_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD3-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:63|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD45RA_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD45RA-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:64|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD45RO_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD45RO-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:65|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD45_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD45-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:66|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD4_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD4-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:67|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD68_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD68-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:68|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
    Select the type of image to save:Image
    Select the image to save:CP3_CD8a_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CD8a-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:69|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
    Select the type of image to save:Image
    Select the image to save:CP3_CollagenIV_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-CollagenIV-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:70|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
    Select the type of image to save:Image
    Select the image to save:CP3_DNA1_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-DNA1-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:71|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
    Select the type of image to save:Image
    Select the image to save:CP3_FoxP3_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-FoxP3-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:72|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
    Select the type of image to save:Image
    Select the image to save:CP3_IFNA5_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-IFNA5-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:73|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
    Select the type of image to save:Image
    Select the image to save:CP3_IgA_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-IgA-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:74|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
    Select the type of image to save:Image
    Select the image to save:CP3_IgM_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-IgM-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:75|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
    Select the type of image to save:Image
    Select the image to save:CP3_Ki67_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-Ki67-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:76|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
    Select the type of image to save:Image
    Select the image to save:CP3_PD1_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-PD1-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:77|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
    Select the type of image to save:Image
    Select the image to save:CP3_PDL1_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-PDL1-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:78|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
    Select the type of image to save:Image
    Select the image to save:CP3_PanKeratin_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-PanKeratin-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:79|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
    Select the type of image to save:Image
    Select the image to save:CP3_SMA_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-SMA-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:80|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
    Select the type of image to save:Image
    Select the image to save:CP3_VEGFc_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-VEGFc-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:81|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
    Select the type of image to save:Image
    Select the image to save:CP3_Vimentin_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-Vimentin-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:82|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
    Select the type of image to save:Image
    Select the image to save:CP3_eCadherin_Masked
    Select method for constructing file names:Single name
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    Enter single file name:\g<sample_name>-eCadherin-Preprocessed
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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